PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = '../' + os.sep + u'results/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'test', 'protocol': '01'}
  Full-screen window = True
  Monitor = mri_monitor
  Screen = 1
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1920, 1080]
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent grating_mask
      Code Type = Auto->JS
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      Before Experiment:
        ## Create a custom mask for the gabor ##

        # Van Bergen et al. (2015) used a 15 degree diameter stimulus
        # current stimulus is 1024 pix
        # the ratio below allows replication of original stimulus proportions for a 1024x1024 gabor
        # e.g., original gabor begins fading in inner 0.5 deg, so this stim begins to fade at 0.5*ratio

        ratio = 512/15

        # create an array, representing each pixel in the stimulus
        myMask = np.ones(shape = [512, 512])

        ## Create a linear equation for fading towards the centre (1) and fading towards the boundary (2) ##
        # basic form: transparency of stimulus = gradient*(distance to centre) + intercept
        # -1: fully transparent, 1: fully opaque

        grad1 = 2/(0.5*ratio)
        grad2 = -2/(0.5*ratio)

        intercept1 = 1 - 2*grad1*ratio
        intercept2 = 1 - 7*grad2*ratio

        # Adjust the value of each cell in the array to represent the transparency of that pixel in the grating
        for row in range(0,myMask.shape[0]):
            for col in range(0,myMask.shape[1]):

                distance = sqrt((abs(row - 255.5))**2 + (abs(col - 255.5))**2) # distance from centre. Max = 7.5

                if distance < 2*ratio: # if in the inner 2/7.5 portion of the stim
                    if distance < 1.5*ratio:
                        myMask[row, col] = -1 # if in the inner 1/7.5 portion, stim should be transparent
                    else:
                        myMask[row, col] =  grad1*distance + intercept1 # linear fade towards inner edge

                if distance > 7*ratio: # if in the outer 7/7.5 portion of the stim
                    if distance > 7.5*ratio:
                        myMask[row,col] = -1 # if distance > 7.5, then you are outside the stim, therefore transparent
                    else:
                        myMask[row,col] = grad2*distance + intercept2 #linear fade towards outer edge

        bar_size = (1.5/7.5)*1024
    CodeComponent reset_params
      Code Type = Auto->JS
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      Begin Routine:
        ## Reset parameters at the beginning of each trial ##

        grating.ori = ori # read orientation from protocol file

        grating.phase = np.random.random_sample() # randomise phase

        rotating_bar.ori = np.random.randint(0,179) # randomise starting orientation of bar

        rotating_bar.opacity = 1 # reset opacity (since bar fades at the end of trial)
    GratingComponent grating
      contrast = 0.3
      mask = $myMask
      sf = 0.014
      size = (1024, 1024)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.5
      tex = sin
      units = pix
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    PolygonComponent rotating_bar
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (5, bar_size)
      startVal [time (s)] = 12.0
      stopVal [duration (s)] = 4.0
      units = pix
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    PolygonComponent fixation_outer
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = circle
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16.0
      units = pix
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    PolygonComponent fixation_inner
      fillColor = white
      saveStartStop = False
      shape = circle
      size = (11, 11)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16.0
      units = pix
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    CodeComponent counterphase
      Code Type = Auto->JS
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      Each Frame:
        if grating.status == STARTED:
            t = tThisFlip - 4
            grating.contrast = 0.3*sin(t * pi * 4) # Cycle at 2Hz
    CodeComponent fading_bar
      Code Type = Auto->JS
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      Each Frame:
        ## In the last second the bar fades to signal the end of the trial ##
        if tThisFlip > 15:
            rotating_bar.opacity = 1-(tThisFlip-15)
    CodeComponent rotation_bb
      Code Type = Auto->JS
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      Begin Routine:
        # initialise variables for rotation mechanism
        # see each frame tab for details
        resp_rt = 0
        status = 0
        stopped_rt = 0
        first = 1

        # counters for how long movement has been happening
        x = 0
        y = 0

        # base keyboard RTs off trial clock, since inbuilt clock is unreliable.
        trialClock = clock.Clock()
        kb = keyboard.Keyboard(clock=trialClock)
      Each Frame:
        if rotating_bar.status == STARTED:

            if first == 1: # clear recorded keys each trial
                kb.clearEvents()
                keys = []
                first = 0
                ori_at_move = rotating_bar.ori
            keys = kb.getKeys(['a', 'b'], waitRelease=False, clear=False)

            if keys: #check that at least 1 key has been pressed
                resp = keys[-1].name # get the last key pressed and its rt
                resp_rt = keys[-1].rt

                if status == 0: #if bar is currently stationary, do nothing for now
                    ori_at_move = rotating_bar.ori # get the orientation of the bar at the time movement commences

                    if resp_rt > stopped_rt: #see if a key has been pressed since movement has stopped
                        status = 1 # change status to moving
                        started_rt = resp_rt # record time that movement recommenced.
                        difference = tThisFlip - started_rt

                else: #if already moving

                    if resp_rt > started_rt: # check if last keypress was after movement started
                        stopped_rt = resp_rt #record the rt of the keypress that stops movement
                        final_stopped = tThisFlip - 12
                        status = 0 #if pressed, stop moving

                    else: #if no key pressed to stop, keep going in the last direction of movement
                        adjustment = 40*(tThisFlip - difference - started_rt)

                        if resp == 'a':
                            rotating_bar.ori = ori_at_move - adjustment

                        elif resp == 'b':
                            rotating_bar.ori = ori_at_move + adjustment
    CodeComponent record_orientation
      Code Type = Auto->JS
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      Begin Experiment:
        # list of errors across trials
        error = []
      Begin Routine:
        final_stopped = 0 # init for the last time bar stopped moving
      End Routine:
        ## Save the final bar orientation ##
        trials.addData('reported_ori', rotating_bar.ori)

        ## Save the time taken to make final response ##
        # Also record if the bar was still moving at the end of the 4s for exclusion.
        if status == 1:
            stopped_time = -99 # value recorded if bar still moving at end of trial
        else:
            stopped_time = final_stopped
        trials.addData('stopped_time', stopped_time)

        ## Calculations for error feedback ##
        reported_ori = rotating_bar.ori
        corrected_ori = reported_ori % 180 # keep it in range [0, 180)

        # due to circularity, need to find shortest path from presented to reported ori
        # e.g., if reported = 179 and ori = 0, the error is 1 deg, rather than 179
        error1 = abs(reported_ori - ori)
        error2 = abs(abs(reported_ori - ori) - 180)

        trial_error = min(error1, error2)

        error.append(trial_error)
  Routine instr
    TextComponent intro_msg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Welcome to the experiment!
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    KeyboardComponent trigger_start
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent prot_file_setup
      Code Type = Auto->JS
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      Begin Experiment:
        prot_file = '../protocols/P%s.csv' % expInfo['protocol']
  Routine rest
    CodeComponent rest_message_init
      Code Type = Auto->JS
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      Begin Routine:
        block = block_no - 1
        last_errors = error[-18:]
        block_error = np.mean(last_errors)
        min_error = min(last_errors)
        average_error = np.mean(error)
        n_less_than_4 = n_less_than_4 = len([x for x in last_errors if x < 4])

        rest_message = (
            f"Nice job! You have completed {block} block(s), keep it up!"
            f"\n\n Your average error was {block_error:.2f} degrees, and your best trial was {min_error:.2f} degrees off."
            f"\n\n You had {n_less_than_4} trial(s) with an error less than 4 degrees."
            f"\n\n Your overall average error is {average_error:.2f} degrees."
        )
    TextComponent text
      letterHeight = 40
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $rest_message
      units = pix
      wrapWidth = 800
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    KeyboardComponent trigger_rest_finished
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $prot_file
    loopType = sequential
    nReps = 1
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    LoopInitiator when_rest loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = rest_this_trial
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      Routine rest
    LoopTerminator when_rest
    Routine trial
  LoopTerminator trials
